PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1700, 900]
  expName = final project experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
          **Welcome to the experiment !**

        Thank you for taking the time to participate in this study.
        You may exit any time by pressing the ESC key.

        This experiment requires headphones.
        Please make sure you are wearing headphone before continuing.

        Thank you for your cooperation.

        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Audio
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $tone_frequency
      startVal [time (s)] = 1.0
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    SoundComponent Sound_2
      sound [set every repeat] = $tone_frequency
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'h'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Thankyou
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you for your enthusiastic participation!
        We couldn't have had such a fantastic time without you :) !

        Please press ESC to end the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine Welcome
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = noise.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'condition': 1, 'noiselevel': 0.5, 'tonefreq': 1500, 'toneduration': 1},
      {'condition': 2, 'noiselevel': 0.7, 'tonefreq': 2000, 'toneduration': 0.5},
      {'condition': 3, 'noiselevel': 0.3, 'tonefreq': 1000, 'toneduration': 0.8},
      {'condition': 1, 'noiselevel': 0.5, 'tonefreq': 1500, 'toneduration': 1},
      {'condition': 2, 'noiselevel': 0.7, 'tonefreq': 2000, 'toneduration': 0.5},
      {'condition': 3, 'noiselevel': 0.3, 'tonefreq': 1000, 'toneduration': 0.8},
      {'condition': 1, 'noiselevel': 0.5, 'tonefreq': 1500, 'toneduration': 1},
      {'condition': 2, 'noiselevel': 0.7, 'tonefreq': 2000, 'toneduration': 0.5},
      {'condition': 3, 'noiselevel': 0.3, 'tonefreq': 1000, 'toneduration': 0.8}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimulus-condition.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'condition': 1, 'tone_frequency': 1000, 'tone_intensity': 0.5, 'tone_duration': 1},
        {'condition': 2, 'tone_frequency': 1000, 'tone_intensity': 0.7, 'tone_duration': 0.5},
        {'condition': 3, 'tone_frequency': 1000, 'tone_intensity': 0.3, 'tone_duration': 0.8}]
      Routine Audio
    LoopTerminator trials
  LoopTerminator trials_2
  Routine Thankyou
